CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '---', 'Load the images by matching files in the folder against the unique text pattern for each stain: d0.tif for nuclei, d1.tif for the PH3 image, d2.tif for the cell stain image. The three images together comprise an image set.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Select the rule criteria:and (file does contain "NucInt.tif")
    Name to assign these images:OrigBlue
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "ActinInt.tif")
    Name to assign these images:OrigGreen
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify the nuclei from the nuclear stain image. Some manual adjustment of the smoothing filter size and maxima supression distance is required to optimize segmentation.']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
    Select the input image:OrigBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,300
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:No
    Name the outline image:NucOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifySecondaryObjects:[module_num:6|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notes:['Identify the cells by using the nuclei as a "seed" region, then growing outwards until stopped by the image threshold or by a neighbor. The Propagation method is used to delineate the boundary between neighboring cells.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Actin
    Select the method to identify the secondary objects:Propagation
    Select the input image:OrigGreen
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    Regularization factor:0
    Name the outline image:ActinOutlines
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:No
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    Name the new primary object outlines:FilteredNucleiOutlines
    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Entropy
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
OverlayOutlines:[module_num:7|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notes:['Overlay the nuclear outline onto the nuclei images']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OrigBlue
    Name the output image:NucOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei

SaveImages:[module_num:8|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notes:['Save the image containing the nuclei channel overlaid with the identified nuclear outlines. ']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
    Select the type of image to save:Image
    Select the image to save:NucOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigBlue
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_NucOverlay
    Saved file format:tif
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:9|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notes:['Overlay the cell and nuclear outlines onto the image containing the addition of actin and cell membrane channel. ']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OrigGreen
    Name the output image:CellOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei
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    Select outline color:Green
    Load outlines from an image or objects?:Objects
    Select objects to display:Actin

SaveImages:[module_num:10|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notes:['Save the image containing the actin and cell membrane channel overlaid with the identified cell outlines. ']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
    Select the type of image to save:Image
    Select the image to save:CellOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigBlue
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CellOverlay
    Saved file format:tif
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:ActinOutlines
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    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigBlue
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_ActinOutlines
    Saved file format:bmp
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:NucOutlines
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    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigBlue
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_NucOutlines
    Saved file format:bmp
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ConvertObjectsToImage:[module_num:13|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
    Select the input objects:Actin
    Name the output image:ActinImage
    Select the color format:uint16
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:ActinImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigBlue
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:ActinImage
    Saved file format:tif
    Output file location:Same folder as image|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ConvertObjectsToImage:[module_num:15|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
    Select the input objects:Nuclei
    Name the output image:NucleiImage
    Select the color format:uint16
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
SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:NucleiImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigBlue
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:NucImage
    Saved file format:tif
    Output file location:Same folder as image|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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